<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:p1="clr-namespace:Bonsai.uEye;assembly=Bonsai.uEye"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>BirdName</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>D:\VideoData\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>TRQ65</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Script>import datetime

@returns(str)
def process(prefix):
  currentTime=datetime.datetime.now()
  return prefix+'/'+currentTime.strftime('%Y%m%d')+'/'</scr:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>ExperName</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ExperName</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>bottom.avi</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:uEyeCapture">
          <p1:DeviceId>1</p1:DeviceId>
          <p1:ConfigFile>BottomParams013119.ini</p1:ConfigFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>CropSites</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>930</cv:X>
                  <cv:Y>108</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>255</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>1224</cv:X>
                  <cv:Y>16</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>1829</cv:X>
                  <cv:Y>110</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>1537</cv:X>
                  <cv:Y>12</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>2253</cv:X>
                  <cv:Y>539</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>2349</cv:X>
                  <cv:Y>825</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>2350</cv:X>
                  <cv:Y>1135</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>2250</cv:X>
                  <cv:Y>1423</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>930</cv:X>
                  <cv:Y>1850</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>255</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>1220</cv:X>
                  <cv:Y>1945</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>1536</cv:X>
                  <cv:Y>1943</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>1829</cv:X>
                  <cv:Y>1856</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>511</cv:X>
                  <cv:Y>539</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>413</cv:X>
                  <cv:Y>827</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>414</cv:X>
                  <cv:Y>1137</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>513</cv:X>
                  <cv:Y>1423</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>100</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>255</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Transpose" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Horizontal</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="0" To="8" Label="Source1" />
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="0" To="17" Label="Source1" />
            <Edge From="0" To="18" Label="Source1" />
            <Edge From="0" To="19" Label="Source1" />
            <Edge From="0" To="20" Label="Source1" />
            <Edge From="0" To="24" Label="Source1" />
            <Edge From="0" To="29" Label="Source1" />
            <Edge From="0" To="31" Label="Source1" />
            <Edge From="0" To="33" Label="Source1" />
            <Edge From="0" To="40" Label="Source1" />
            <Edge From="0" To="41" Label="Source1" />
            <Edge From="0" To="42" Label="Source1" />
            <Edge From="0" To="43" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="12" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="14" Label="Source1" />
            <Edge From="5" To="14" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="12" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source4" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source3" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="55" Label="Source1" />
            <Edge From="17" To="21" Label="Source1" />
            <Edge From="18" To="21" Label="Source2" />
            <Edge From="19" To="21" Label="Source3" />
            <Edge From="20" To="21" Label="Source4" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="52" Label="Source6" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="24" To="26" Label="Source1" />
            <Edge From="25" To="35" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="26" To="28" Label="Source1" />
            <Edge From="27" To="37" Label="Source1" />
            <Edge From="28" To="37" Label="Source3" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="35" Label="Source2" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="35" Label="Source3" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source4" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source2" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="55" Label="Source3" />
            <Edge From="40" To="44" Label="Source1" />
            <Edge From="41" To="44" Label="Source2" />
            <Edge From="42" To="44" Label="Source3" />
            <Edge From="43" To="44" Label="Source4" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="45" To="47" Label="Source1" />
            <Edge From="46" To="52" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="47" To="49" Label="Source1" />
            <Edge From="47" To="50" Label="Source1" />
            <Edge From="47" To="51" Label="Source1" />
            <Edge From="48" To="52" Label="Source2" />
            <Edge From="49" To="52" Label="Source3" />
            <Edge From="50" To="52" Label="Source4" />
            <Edge From="51" To="52" Label="Source5" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="54" To="55" Label="Source2" />
            <Edge From="55" To="56" Label="Source1" />
            <Edge From="56" To="57" Label="Source1" />
            <Edge From="57" To="58" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertToImage" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\VideoData\SLV75/20220618/bottom.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>28.583382</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ImageInfo.FrameNumber</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ExperName</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>bottom.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\VideoData\SLV75/20220618/bottom.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:uEyeCapture">
          <p1:DeviceId>3</p1:DeviceId>
          <p1:ConfigFile>FrontParams032919.ini</p1:ConfigFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ExperName</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>front.avi</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\VideoData\SLV75/20220618/front.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>77</cv:X>
            <cv:Y>114</cv:Y>
            <cv:Width>871</cv:Width>
            <cv:Height>472</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ImageInfo.FrameNumber</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ExperName</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>front.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\VideoData\SLV75/20220618/front.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:uEyeCapture">
          <p1:DeviceId>2</p1:DeviceId>
          <p1:ConfigFile>TopParams022820.ini</p1:ConfigFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Preprocess</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MaskPolygon">
                <cv:Regions>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>4</cv:X>
                      <cv:Y>8</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>560</cv:X>
                      <cv:Y>8</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>560</cv:X>
                      <cv:Y>425</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>4</cv:X>
                      <cv:Y>425</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                </cv:Regions>
                <cv:MaskType>ToZero</cv:MaskType>
                <cv:FillValue>
                  <cv:Val0>145</cv:Val0>
                  <cv:Val1>145</cv:Val1>
                  <cv:Val2>145</cv:Val2>
                  <cv:Val3>255</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>183</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Truncate</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Median</cv:SmoothType>
          <cv:Size1>21</cv:Size1>
          <cv:Size2>21</cv:Size2>
          <cv:Sigma1>17</cv:Sigma1>
          <cv:Sigma2>17</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>39</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.Y</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ExperName</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>top.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ExperName</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>top.avi</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\VideoData\SLV75/20220618/top.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>100</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ImageInfo.FrameNumber</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\VideoData\SLV75/20220618/top.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="osc:SendMessage">
        <osc:Connection>UdpSend</osc:Connection>
        <osc:Address>/number</osc:Address>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>500</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1</mx:BufferSize>
          <mx:SamplesPerRead>-1</mx:SamplesPerRead>
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName />
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai0</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ExperName</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>SYNC.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\VideoData\SLV75/20220618/SYNC.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="10" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="13" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="11" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="14" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="18" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="28" Label="Source1" />
      <Edge From="20" To="24" Label="Source2" />
      <Edge From="20" To="25" Label="Source1" />
      <Edge From="20" To="26" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="29" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="33" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="34" To="54" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="35" To="51" Label="Source2" />
      <Edge From="35" To="52" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="42" To="44" Label="Source1" />
      <Edge From="43" To="55" Label="Source3" />
      <Edge From="43" To="57" Label="Source1" />
      <Edge From="44" To="55" Label="Source4" />
      <Edge From="44" To="57" Label="Source2" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="56" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="55" Label="Source5" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="54" To="57" Label="Source3" />
      <Edge From="55" To="56" Label="Source2" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="61" To="64" Label="Source2" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="68" Label="Source2" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="67" To="68" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>